---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Semantic link"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Florian Leprevost\\Documents\\SemLink"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sequence Conditioning_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback_1 always
	run position always
	run counter1_1 always
	run new_loop_1 always

define sequence Conditioning_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run position_2 always
	run counter1_1_1 always
	run new_reset_feedback_1_2 always
	run new_loop_1_2 always

define inline_script ITI
	set description "Executes Python code"
	___run__
	import random
	var.dur=random.gauss(2000,200)
	__end__
	___prepare__
	import random
	var.dur=random.gauss(2000,200)
	__end__

define inline_script ITI_1
	set description "Executes Python code"
	___run__
	import random
	var.dur=random.gauss(2000,200)
	__end__
	___prepare__
	import random
	var.dur=random.gauss(2000,200)
	__end__

define inline_script Init
	set description "Executes Python code"
	___run__
	import random
	exp.stimuli = []
	
	#set all stimuli lists
	exp.tool = ['broom1.jpg','broom2.jpg','broom3.jpg','broom4.jpg','broom5.jpg','broom6.jpg','broom7.jpg','broom8.jpg','broom9.jpg','broom10.jpg','bucket1.png','bucket2.png','bucket3.png','bucket4.png','bucket5.png','bucket6.png','bucket7.png','bucket8.png','bucket9.png','bucket10.png']
	
	exp.brooms = ['broom1.jpg','broom2.jpg','broom3.jpg','broom4.jpg','broom5.jpg','broom6.jpg','broom7.jpg','broom8.jpg','broom9.jpg','broom10.jpg']
	exp.buckets = ['bucket1.jpg','bucket2.jpg','bucket3.jpg','bucket4.jpg','bucket5.jpg','bucket6.jpg','bucket7.jpg','bucket8.jpg','bucket9.jpg','bucket10.jpg']
	
	exp.location = ['outside1.jpg','outside2.jpg','outside3.jpg','outside4.jpg','outside5.jpg','outside6.jpg','outside7.jpg','outside8.jpg','outside9.jpg','outside10.jpg','inside1.jpg','inside2.jpg','inside3.jpg','inside4.jpg','inside5.jpg','inside6.jpg','inside7.jpg','inside8.jpg','inside9.jpg','inside10.jpg']
	
	exp.insides = ['inside1.jpg','inside2.jpg','inside3.jpg','inside4.jpg','inside5.jpg','inside6.jpg','inside7.jpg','inside8.jpg','inside9.jpg','inside10.jpg']
	exp.outsides = ['outside1.jpg','outside2.jpg','outside3.jpg','outside4.jpg','outside5.jpg','outside6.jpg','outside7.jpg','outside8.jpg','outside9.jpg','outside10.jpg']
	
	
	#create lists of stimuli for each block
	exp.P1 = []; exp.P2 = []; exp.P3 = []; exp.P4 = []
	exp.L1 = []; exp.L2 = []; exp.L3 = []; exp.L4 = []
	exp.T1 = []; exp.T2 = []; exp.T3 = []; exp.T4 = []
	
	#OBJECTS	
	a = random.sample(exp.buckets,5)
	b = random.sample(exp.brooms,5)
	c = []
	d = []
	#create sets of 10 stimuli	
	for pack in a,b:
		for img in pack:
			exp.P1.append(img)
	
	for pack in a,d:
		for img in pack:
			exp.P2.append(img)
		
	for pack in c,b:
		for img in pack:
			exp.P3.append(img)
	
	for pack in c,d:
		for img in pack:
			exp.P4.append(img)
	
	#LOCATION	
	a = random.sample(exp.outsides,5)
	b = random.sample(exp.insides,5)
	c = []
	d = []
	
	for each in exp.outsides:
		if each not in a:
			c.append(each)
	
	for each in exp.insides:
		if each not in b:
			d.append(each)
	
	#create sets of 10 stimuli	
	for pack in a,b:
		for img in pack:
			exp.L1.append(img)
	
	for pack in a,d:
		for img in pack:
			exp.L2.append(img)
		
	for pack in c,b:
		for img in pack:
			exp.L3.append(img)
	
	for pack in c,d:
		for img in pack:
			exp.L4.append(img)
	
	#TOOL
	a = random.sample(exp.brooms,5)
	b = random.sample(exp.buckets,5)
	c = []
	d = []
	
	for each in exp.brooms:
		if each not in a:
			c.append(each)
	
	for each in exp.buckets:
		if each not in b:
			d.append(each)
	
	#create sets of 10 stimuli	
	for pack in a,b:
		for img in pack:
			exp.T1.append(img)
	
	for pack in a,d:
		for img in pack:
			exp.T2.append(img)
		
	for pack in c,b:
		for img in pack:
			exp.T3.append(img)
	
	for pack in c,d:
		for img in pack:
			exp.T4.append(img)
	__end__
	set _prepare ""

define loop MEMO
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Conditioning_1_2

define sketchpad Pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Pause, press anykey when ready" x=0 y=0 z_index=0

define loop Preconditioning
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run pairs_sequence

define loop block
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_seq
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set column_order "blocknr;condition"
	set break_if_on_first yes
	set break_if never
	setcycle 0 blocknr 1
	setcycle 0 condition L
	setcycle 1 blocknr 1
	setcycle 1 condition T
	setcycle 2 blocknr 2
	setcycle 2 condition L
	setcycle 3 blocknr 2
	setcycle 3 condition T
	setcycle 4 blocknr 3
	setcycle 4 condition L
	setcycle 5 blocknr 3
	setcycle 5 condition T
	setcycle 6 blocknr 4
	setcycle 6 condition L
	setcycle 7 blocknr 4
	setcycle 7 condition T
	run block_seq

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim1 "bowtie.jpg"
	setcycle 0 stim2 "a_airport_IMG_1692.jpg"
	setcycle 0 correct_response 1
	setcycle 0 position 256
	setcycle 0 pos2 -256
	setcycle 1 stim1 "ladder.jpg"
	setcycle 1 stim2 "c_clothing_store_Kleidung1.jpg"
	setcycle 1 correct_response 1
	setcycle 1 position -256
	setcycle 1 pos2 256
	setcycle 2 stim1 "bowtie.jpg"
	setcycle 2 stim2 "a_airport_IMG_1692.jpg"
	setcycle 2 correct_response 1
	setcycle 2 position -256
	setcycle 2 pos2 256
	setcycle 3 stim1 "mug05.jpg"
	setcycle 3 stim2 "mug05.jpg"
	setcycle 3 correct_response 1
	setcycle 3 position 256
	setcycle 3 pos2 -256
	setcycle 4 stim1 "ladder.jpg"
	setcycle 4 stim2 "c_clothing_store_Kleidung1.jpg"
	setcycle 4 correct_response 1
	setcycle 4 position 256
	setcycle 4 pos2 -256
	setcycle 5 stim1 "bowtie.jpg"
	setcycle 5 stim2 "a_airport_IMG_1692.jpg"
	setcycle 5 correct_response 1
	setcycle 5 position 256
	setcycle 5 pos2 -256
	run trial_sequence

define sequence block_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_stims always
	run trial always

define sketchpad choice_3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x="[pos1]" y=-50 z_index=0
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x="[pos2]" y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0

define sketchpad choice_select_l
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x="[pos1]" y=-50 z_index=0
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x="[pos2]" y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=-100 y=200 z_index=0

define sketchpad choice_select_r
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x="[pos1]" y=-50 z_index=0
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x="[pos2]" y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=100 y=200 z_index=0

define inline_script chose_stim
	set description "Executes Python code"
	set _run ""
	___prepare__
	tn = exp.get("trialnr")
	
	#pick image from list
	exp.set("image",exp.stimuli[tn])
	
	#set correct response
	if exp.stimuli[tn] == exp.stimuli[tn-1]:
		exp.set("correct_response",1)
	else:
		exp.set("correct_response",0)
	__end__

define keyboard_response con_resp
	set timeout 1495
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response con_resp_1
	set timeout 1495
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad cond
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0

define sketchpad cond_1
	set duration 1495
	set description "Displays stimuli"
	draw image center=1 file="piece[Reward].jpg" scale=0.7 show_if=always x=0 y=0 z_index=0

define sketchpad cond_1_3
	set duration 1495
	set description "Displays stimuli"

define sketchpad cond_3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0

define loop conditionning
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run reseq

define form_text_display condphase2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Phase 2"
	__form_text__
	Now, you will be presented with single images with a + and - sign under it, followed by a reward (a coin) or not. The position of the + and - (left and right) change randomly.
	
	TASK INSTRUCTIONS
	
	You need to predict whether the image is rewarded or not, by pressing left or right to select the corresponding sign: + for rewarded and  - for unrewarded.
	If you successfully predict a reward, the amount is added to your earnings, but if you predict a reward when there is none, a penalty is substracted from your earnings.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script counter1
	set description "Executes Python code"
	___run__
	var.counter=0
	__end__
	set _prepare "var.counter=0"

define inline_script counter1_1
	set description "Executes Python code"
	set _run "var.counter=0"
	set _prepare "var.counter=0"

define inline_script counter1_1_1
	set description "Executes Python code"
	set _run "var.counter=0"
	set _prepare "var.counter=0"

define inline_script counter2
	set description "Executes Python code"
	___run__
	var.counter +=1
	if var.response_con_resp == "None":
	    var.miss +=1
	else:
	    if var.correct==1 and var.Reward==1:
	        var.money += 1
	    if var.correct==0 and var.Reward==0:
	        var.penalty += 1
	__end__
	set _prepare ""

define inline_script counter2_2
	set description "Executes Python code"
	___run__
	var.counter +=1
	if var.response_con_resp_1 == "None":
	    var.miss +=1
	else:
	    if var.correct==1 and var.Reward==1:
	        var.money += 1
	    if var.correct==0 and var.Reward==0:
	        var.penalty += 1
	__end__
	set _prepare ""

define inline_script counter2_2_1
	set description "Executes Python code"
	___run__
	var.counter +=1
	__end__
	set _prepare ""

define keyboard_response dec_resp_2
	set timeout 2495
	set flush yes
	set event_type keypress
	set duration 2495
	set description "Collects keyboard responses"

define loop decisionphase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Conditioning_1

define inline_script deterresponse
	set description "Executes Python code"
	___run__
	if var.response_con_resp == "left":
	    var.poscircle = -100
	if var.response_con_resp == "right":
	    var.poscircle = 100
	if var.response_con_resp == "None":
	    var.poscircle = 0
	__end__
	set _prepare ""

define form_text_display distr
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Phase 3"
	__form_text__
	Now you will be presented with single images sequentially.
	
	TASK INSTRUCTIONS
	Press the left AND right buttons when you see the same image presented twice in row.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_form_text_display always
	run instructions always
	run Preconditioning always
	run condphase2 always
	run money always
	run conditionning always
	run decisionphase always
	run memo_1 always
	run MEMO always

define sketchpad fixation_cross_2
	set duration "[dur]"
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0

define sketchpad fixation_dot
	set duration 495
	set description "Displays stimuli"
	draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0

define sketchpad fixation_dot_1
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration "[dur]"
	set description "Displays stimuli"

define sketchpad fixation_dot_1_1
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration "[dur]"
	set description "Displays stimuli"

define sketchpad fixation_dot_1_2
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 995
	set description "Displays stimuli"

define sketchpad fixation_dot_1_2_1
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 995
	set description "Displays stimuli"

define sketchpad fixation_dot_1_2_2
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 300
	set description "Displays stimuli"

define inline_script get_stims
	set description "Executes Python code"
	___run__
	exp.stimuli = []
	bn = exp.get("blocknr")
	
	if bn == 1:
		if exp.condition == 'P':
			for each in exp.P1:
				exp.stimuli.append(each)
		elif exp.condition == 'L':
			for each in exp.L1:
				exp.stimuli.append(each)	
		elif exp.condition == 'T':
			for each in exp.T1:
				exp.stimuli.append(each)
	elif bn == 2:
		if exp.condition == 'P':
			for each in exp.P2:
				exp.stimuli.append(each)
		elif exp.condition == 'L':
			for each in exp.L2:
				exp.stimuli.append(each)	
		elif exp.condition == 'T':
			for each in exp.T2:
				exp.stimuli.append(each)		
	elif bn == 3:
		if exp.condition == 'P':
			for each in exp.P3:
				exp.stimuli.append(each)
		elif exp.condition == 'L':
			for each in exp.L3:
				exp.stimuli.append(each)	
		elif exp.condition == 'T':
			for each in exp.T3:
				exp.stimuli.append(each)			
	elif bn == 4:
		if exp.condition == 'P':
			for each in exp.P4:
				exp.stimuli.append(each)
		elif exp.condition == 'L':
			for each in exp.L4:
				exp.stimuli.append(each)	
		elif exp.condition == 'T':
			for each in exp.T4:
				exp.stimuli.append(each)
	
	
	
	#shuffle base list
	random.shuffle(exp.stimuli)
	
	#draw 3 randoms to be shown twice
	picks = random.sample(exp.stimuli,3)
	
	for img in picks:
		if img in exp.stimuli:
			index = exp.stimuli.index(img)
			exp.stimuli.insert(index,img)
	__end__
	set _prepare ""

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Practice
	__form_text__
	You will be presented with pairs of images.
	Try to remember which image is associated with which, to maximize your earnings later.
	
	TASK INSTRUCTIONS
	Press the right AND left buttons when the two images are different, but DON'T PRESS when the two images are the same.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script keepitup
	set description "Executes Python code"
	___run__
	fixed_dur = 1495
	self.sleep(fixed_dur - self.get("response_time_con_resp"))
	__end__
	set _prepare ""

define inline_script keepitup2_2
	set description "Executes Python code"
	___run__
	fixed_dur = 2495
	self.sleep(fixed_dur - self.get("response_time_dec_resp_2"))
	__end__
	set _prepare ""

define inline_script keepitup_1
	set description "Executes Python code"
	___run__
	fixed_dur = 2495
	self.sleep(fixed_dur - self.get("response_time_pre_resp"))
	__end__
	set _prepare ""

define inline_script keepitup_2
	set description "Executes Python code"
	___run__
	fixed_dur = 1495
	self.sleep(fixed_dur - self.get("response_time_con_resp_1"))
	__end__
	set _prepare ""

define logger logger_con
	set description "Logs experimental data"
	set auto_log yes

define logger logger_con_1
	set description "Logs experimental data"
	set auto_log yes

define logger logger_dec_2
	set description "Logs experimental data"
	set auto_log yes

define logger logger_pre
	set description "Logs experimental data"
	set auto_log yes

define form_text_display memo_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Phase 5"
	__form_text__
	Finally, you will be presented with pairs of images you have seen before, in old and new pairings, with a + and - sign under it. The position of the + and - (left and right) change randomly.
	
	TASK INSTRUCTIONS
	You need to indicate whether the pairing is old (seen in the first phase) by selecting the + sign, or if it is a different configuration by selecting the - sign.
	In other words, select + if you recognize the association, and select - if you don't.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script money
	set description "Executes Python code"
	___run__
	var.money=0
	var.penalty=0
	var.miss=0
	__end__
	set _prepare ""

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	Welcome
	
	You will be presented with several task where you will see images, and be asked to remember what they are associated to. 
	
	Read the next instructions carefully
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display new_form_text_display_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Phase 4"
	__form_text__
	Now, you will be presented with single images from the first phase, indirectly associated with rewards, with a + and - sign under it. The position of the + and - (left and right) change randomly.
	
	TASK INSTRUCTIONS
	
	As before, you need to predict whether the image is rewarded or not, by pressing left or right to select the corresponding sign: + for rewarded and  - for unrewarded.
	If you successfully predict a reward, the amount is added to your earnings, but if you predict a reward when there is none, a penalty is substracted from your earnings.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script new_inline_script_5
	set description "Executes Python code"
	___run__
	import random
	var.dur=random.gauss(2000,200)
	position = random.choice([256,-256])
	var.pos1= position
	var.pos2 = -position
	__end__
	___prepare__
	import random
	var.dur=random.gauss(2000,200)
	position = random.choice([256,-256])
	var.pos1= position
	var.pos2 = -position
	__end__

define keyboard_response new_keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim2 "bowtie.jpg"
	setcycle 0 paired 1
	setcycle 0 Reward 1
	setcycle 1 stim2 "ladder.jpg"
	setcycle 1 paired 1
	setcycle 1 Reward 0
	setcycle 2 stim2 "bowtie.jpg"
	setcycle 2 paired 1
	setcycle 2 Reward 1
	setcycle 3 stim2 "ladder.jpg"
	setcycle 3 paired 1
	setcycle 3 Reward 0
	run new_sequence_1

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim1 "bowtie.jpg"
	setcycle 0 paired 1
	setcycle 0 Reward 1
	setcycle 1 stim1 "ladder.jpg"
	setcycle 1 paired 1
	setcycle 1 Reward 0
	setcycle 2 stim1 "bowtie.jpg"
	setcycle 2 paired 1
	setcycle 2 Reward 1
	setcycle 3 stim1 "ladder.jpg"
	setcycle 3 paired 1
	setcycle 3 Reward 0
	setcycle 4 stim1 "a_airport_IMG_1692.jpg"
	setcycle 4 paired 1
	setcycle 4 Reward 1
	run new_sequence_1_2

define loop new_loop_1_2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim1 "electrictoothbrush01c.jpg"
	setcycle 0 stim2 "Farm_Kartoffelfeld_SchwedenCC.jpg"
	setcycle 0 old 0
	setcycle 1 stim1 "trafficlight.jpg"
	setcycle 1 stim2 "b_bedroom_pittsburgh_IMG_4079.jpg"
	setcycle 1 old 0
	setcycle 2 stim1 "bowlingpin.jpg"
	setcycle 2 stim2 "mountain-snow-walking-snow-mountain-winter-landscapeCC.jpg"
	setcycle 2 old 0
	setcycle 3 stim1 "martiniglass01b.jpg"
	setcycle 3 stim2 "c_classroom_sala02.jpg"
	setcycle 3 old 1
	setcycle 4 stim1 "cookingpot.jpg"
	setcycle 4 stim2 "k_kitchen_IMG_3734.jpg"
	setcycle 4 old 1
	setcycle 5 stim1 "treadmill.jpg"
	setcycle 5 stim2 "r_railroad_tunnel_outdoor_railroad_tunnel_000128.jpg"
	setcycle 5 old 0
	setcycle 6 stim1 "beachumbrella01.jpg"
	setcycle 6 stim2 "g_garden_1280_2.jpg"
	setcycle 6 old 0
	setcycle 7 stim1 "tennisracket.jpg"
	setcycle 7 stim2 "c_castle_castle_000001.jpg"
	setcycle 7 old 0
	setcycle 8 stim1 "beachumbrella01.jpg"
	setcycle 8 stim2 "Stavronikita_BeachCC.jpg"
	setcycle 8 old 1
	setcycle 9 stim1 "webcam.jpg"
	setcycle 9 stim2 "o_office_despacho.jpg"
	setcycle 9 old 1
	setcycle 10 stim1 "television.jpg"
	setcycle 10 stim2 "d_dining_room_indoor_0582.jpg"
	setcycle 10 old 0
	setcycle 11 stim1 "electrictoothbrush01c.jpg"
	setcycle 11 stim2 "b_bathroom_bothroom99.jpg"
	setcycle 11 old 1
	setcycle 12 stim1 "lawnmower.jpg"
	setcycle 12 stim2 "o_office_despacho.jpg"
	setcycle 12 old 0
	setcycle 13 stim1 "trafficlight.jpg"
	setcycle 13 stim2 "Farm_Kartoffelfeld_SchwedenCC.jpg"
	setcycle 13 old 1
	setcycle 14 stim1 "hardhat02.jpg"
	setcycle 14 stim2 "k_kitchen_IMG_3734.jpg"
	setcycle 14 old 0
	setcycle 15 stim1 "downhillski.jpg"
	setcycle 15 stim2 "courtroomCC.jpg"
	setcycle 15 old 0
	setcycle 16 stim1 "callbell.jpg"
	setcycle 16 stim2 "c_classroom_sala02.jpg"
	setcycle 16 old 0
	setcycle 17 stim1 "rainboot.jpg"
	setcycle 17 stim2 "courtroomCC.jpg"
	setcycle 17 old 1
	setcycle 18 stim1 "television.jpg"
	setcycle 18 stim2 "l_living_room_living53.jpg"
	setcycle 18 old 1
	setcycle 19 stim1 "shoppingcart.jpg"
	setcycle 19 stim2 "s_savanna_kiangwest_savanna.jpg"
	setcycle 19 old 0
	setcycle 20 stim1 "tennisracket.jpg"
	setcycle 20 stim2 "Tennis_CourtCC.jpg"
	setcycle 20 old 1
	setcycle 21 stim1 "lawnmower.jpg"
	setcycle 21 stim2 "g_garden_1280_2.jpg"
	setcycle 21 old 1
	setcycle 22 stim1 "callbell.jpg"
	setcycle 22 stim2 "s_savanna_kiangwest_savanna.jpg"
	setcycle 22 old 1
	setcycle 23 stim1 "rainboot.jpg"
	setcycle 23 stim2 "Tennis_CourtCC.jpg"
	setcycle 23 old 0
	setcycle 24 stim1 "martiniglass01b.jpg"
	setcycle 24 stim2 "b_bathroom_bothroom99.jpg"
	setcycle 24 old 0
	setcycle 25 stim1 "downhillski.jpg"
	setcycle 25 stim2 "mountain-snow-walking-snow-mountain-winter-landscapeCC.jpg"
	setcycle 25 old 1
	setcycle 26 stim1 "shoppingcart.jpg"
	setcycle 26 stim2 "r_railroad_tunnel_outdoor_railroad_tunnel_000128.jpg"
	setcycle 26 old 1
	setcycle 27 stim1 "webcam.jpg"
	setcycle 27 stim2 "Stavronikita_BeachCC.jpg"
	setcycle 27 old 0
	setcycle 28 stim1 "bowlingpin.jpg"
	setcycle 28 stim2 "b_bedroom_pittsburgh_IMG_4079.jpg"
	setcycle 28 old 1
	setcycle 29 stim1 "treadmill.jpg"
	setcycle 29 stim2 "c_castle_castle_000001.jpg"
	setcycle 29 old 1
	setcycle 30 stim1 "hardhat02.jpg"
	setcycle 30 stim2 "d_dining_room_indoor_0582.jpg"
	setcycle 30 old 1
	setcycle 31 stim1 "cookingpot.jpg"
	setcycle 31 stim2 "l_living_room_living53.jpg"
	setcycle 31 old 0
	run new_sequence_1_1_2

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback new_reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback new_reset_feedback_1_2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ITI always
	run fixation_dot_1 always
	run pposition always
	run cond always
	run con_resp always
	run select_r "[response_con_resp] == \"right\""
	run select_l "[response_con_resp] == \"left\""
	run keepitup always
	run counter2 always
	run fixation_dot_1_2 "[response_con_resp] == \"left\" or [response_con_resp] == \"right\""
	run tooslow "[response_con_resp] == \"None\""
	run cond_1 always
	run logger_con always

define sequence new_sequence_1_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_5 always
	run pposition_1_1 always
	run fixation_cross_2 always
	run choice_3 always
	run dec_resp_2 always
	run choice_select_r "[response_dec_resp_2] == \"right\""
	run choice_select_l "[response_dec_resp_2] == \"left\""
	run keepitup2_2 always
	run counter2_2_1 always
	run tooslow_1_1 "[response_dec_resp_2] == \"None\""
	run logger_dec_2 always

define sequence new_sequence_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ITI_1 always
	run fixation_dot_1_1 always
	run pposition_1 always
	run cond_3 always
	run con_resp_1 always
	run selectd_r "[response_con_resp_1] == \"right\""
	run selectd_l "[response_con_resp_1] == \"left\""
	run keepitup_2 always
	run counter2_2 always
	run fixation_dot_1_2_1 "[response_con_resp_1] == \"right\" or [response_con_resp_1] == \"left\""
	run tooslow_1 "[response_con_resp_1] == \"None\""
	run cond_1_3 always
	run logger_con_1 always

define sequence pairs_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run block_loop always

define inline_script position
	set description "Executes Python code"
	___run__
	from random import randint, shuffle
	import numpy as np
	#var.pposition = np.array([(randint(0,1)*2-1)*100 for i in range(16)])
	seq1 = np.array([100 for i in range(8)] +[-100 for i in range(8)])
	seq = np.array(list())
	for i in range(4):
	    np.random.shuffle(seq1)
	    seq = np.concatenate((seq,seq1))
	
	var.pposition = seq
	var.mposition = - var.pposition
	__end__
	set _prepare ""

define inline_script position_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	from random import randint, shuffle
	import numpy as np
	#var.pposition = np.array([(randint(0,1)*2-1)*100 for i in range(16)])
	seq1 = np.array([100 for i in range(8)] +[-100 for i in range(8)])
	seq = np.array(list())
	for i in range(6):
	    np.random.shuffle(seq1)
	    seq = np.concatenate((seq,seq1))
	
	var.pposition = seq
	var.mposition = - var.pposition
	__end__

define inline_script position_2
	set description "Executes Python code"
	___run__
	from random import randint, shuffle
	import numpy as np
	#var.pposition = np.array([(randint(0,1)*2-1)*100 for i in range(16)])
	seq1 = np.array([100 for i in range(8)] +[-100 for i in range(8)])
	seq = np.array(list())
	for i in range(4):
	    np.random.shuffle(seq1)
	    seq = np.concatenate((seq,seq1))
	
	var.pposition = seq
	var.mposition = - var.pposition
	__end__
	set _prepare ""

define inline_script pposition
	set description "Executes Python code"
	___run__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.Reward ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	        
	__end__
	___prepare__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.Reward ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	__end__

define inline_script pposition_1
	set description "Executes Python code"
	___run__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.Reward ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	        
	__end__
	___prepare__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.Reward ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	__end__

define inline_script pposition_1_1
	set description "Executes Python code"
	___run__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.old ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	        
	__end__
	___prepare__
	var.pp = var.pposition[var.counter]
	var.mp = var.mposition[var.counter]
	if var.old ==1:
	    if var.pp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	else:
	    if var.mp == 100:
	        var.correct_response="right"
	    else:
	        var.correct_response="left"
	__end__

define keyboard_response pre_resp
	set timeout 2495
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sequence reseq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback always
	run position_1 "[count_new_reset_feedback]==0"
	run counter1 always
	run new_loop always

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad select_l
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=-100 y=200 z_index=0

define sketchpad select_r
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=100 y=200 z_index=0

define sketchpad selectd_l
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=-100 y=200 z_index=0

define sketchpad selectd_r
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="+" x="[pp]" y=200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text="-" x="[mp]" y=200 z_index=0
	draw circle color="#aa0000" fill=0 penwidth=8 r=32 show_if=always x=100 y=200 z_index=0

define sketchpad show_stim
	set duration 0
	set description "Displays stimuli"
	set background white
	draw image center=1 file="[image]" scale=0.65 show_if=always x=0 y=0 z_index=0

define inline_script sleep
	set description "Executes Python code"
	___run__
	rt = exp.get("response_time")
	
	timeout = 2000 - rt
	
	self.sleep(timeout)
	__end__
	set _prepare ""

define sketchpad target_1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stim1]" scale=0.65 show_if=always x="[position]" y=0 z_index=0
	draw image center=1 file="[stim2]" scale=0.65 show_if=always x="[pos2]" y=0 z_index=0

define sketchpad tooslow
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color="#aa0000" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define sketchpad tooslow_1
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color="#aa0000" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define sketchpad tooslow_1_1
	# draw line color=black penwidth=1 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	# draw line color=black penwidth=1 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color="#aa0000" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define loop trial
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_seq
	set description "Repeatedly runs another item"
	set cycles 13
	set continuous no
	set column_order "image;trialnr"
	set break_if_on_first yes
	set break_if never
	setcycle 0 image ""
	setcycle 0 trialnr 0
	setcycle 1 image ""
	setcycle 1 trialnr 1
	setcycle 2 image ""
	setcycle 2 trialnr 2
	setcycle 3 image ""
	setcycle 3 trialnr 3
	setcycle 4 image ""
	setcycle 4 trialnr 4
	setcycle 5 image ""
	setcycle 5 trialnr 5
	setcycle 6 image ""
	setcycle 6 trialnr 6
	setcycle 7 image ""
	setcycle 7 trialnr 7
	setcycle 8 image ""
	setcycle 8 trialnr 8
	setcycle 9 image ""
	setcycle 9 trialnr 9
	setcycle 10 image ""
	setcycle 10 trialnr 10
	setcycle 11 image ""
	setcycle 11 trialnr 11
	setcycle 12 image ""
	setcycle 12 trialnr 12
	run trial_seq

define sequence trial_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run chose_stim always
	run fixation_dot_1_2_2 always
	run show_stim always
	run new_keyboard_response always
	run sleep always
	run new_logger always

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run target_1 always
	run pre_resp always
	run keepitup_1 always
	run Pause "([count_fixation_dot]+1)%64==0"
	run logger_pre always

